PsychoPy2experiment version="1.78.01"
Settings
  Monitor = testMonitor
  color = $[-0.15,-0.15,-0.15]
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = N-Back_v.1_demo_with_error
  Units = use prefs
  Screen = 1
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Routines
  Routine routine_2_Back
    CodeComponent code
      Begin Experiment:
        errorXpos=[]
      Each Frame:
        if len(key_resp_3.keys)==0:
            letterXpos=0
        if len(key_resp_3.keys)>0:
            letterXpos=2

        if trialType=='nonTarget' and key_resp_3.keys=='2':
            errorXpos=0
        if trialType=='Target' and key_resp_3.keys=='3':
            errorXpos=0
      Begin Routine:
        if trialType=='nonTarget':
            letters = ['B', 'C', 'D', 'F', 'G', 'H', 'J', 'K', 'L', 'M', 'N', 'P', 'Q', 'R', 'S', 'T', 'V', 'W', 'X', 'Z']
            from random import choice
            letter=choice(letters)
        elif trialType=='target':
            letter=Back2minus2

        errorXpos=2
      End Routine:
        Back2minus2=Back2minus1
        Back2minus1=letter
        letterXpos=0
        errorXpos=2
    TextComponent text_4
      text [set every repeat] = $letter
      stopVal [duration (s)] = 2
      pos [set every frame] = [letterXpos, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.4
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    TextComponent Back2Text
      wrapWidth = 1.5
      text = Matches 2 Back?
      stopVal [duration (s)] = 2
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    ImageComponent image_3
      stopVal [duration (s)] = 2
      pos = [-0.3, -0.7]
      startVal [time (s)] = 0.0
      image = yes_key.jpg
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    ImageComponent image_4
      stopVal [duration (s)] = 2
      pos = [0.3, -0.7]
      startVal [time (s)] = 0.0
      image = no_key.jpg
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    KeyboardComponent key_resp_3
      correctAns = $corrResponse
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = '2','3'
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = red
      text [set every frame] = ERROR
      stopVal [duration (s)] = 2
      pos [set every frame] = [errorXpos, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine routine_0_Back_Target
    CodeComponent code_3
      Begin Experiment:
        Back0Target=[]
      Begin Routine:
        letters = ['B', 'C', 'D', 'F', 'G', 'H', 'J', 'K', 'L', 'M', 'N', 'P', 'Q', 'R', 'S', 'T', 'V', 'W', 'X', 'Z']
        from random import choice
        Back0Target=choice(letters)
    TextComponent text_3
      text [set every repeat] = $Back0Target
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.4
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    TextComponent text
      color = red
      text = TARGET
      stopVal [duration (s)] = 2
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine rest
    TextComponent text_5
      text = Relax
      stopVal [duration (s)] = 10
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine routine_0_Back
    CodeComponent code_2
      Begin Experiment:
        letter=[]
        errorXpos=[]
      Each Frame:
        if len(key_resp_2.keys)==0:
            letterXpos=0
        if len(key_resp_2.keys)>0:
            letterXpos=2
        if trialType=='nonTarget' and key_resp_2.keys=='2':
            errorXpos=0
        if trialType=='Target' and key_resp_2.keys=='3':
            errorXpos=0
      Begin Routine:
        if trialType=='nonTarget':
            letters = ['B', 'C', 'D', 'F', 'G', 'H', 'J', 'K', 'L', 'M', 'N', 'P', 'Q', 'R', 'S', 'T', 'V', 'W', 'X', 'Z']
            from random import choice
            letter=choice(letters)
        elif trialType=='target':
            letter=Back0Target
        errorXpos=2
      End Routine:
        letterXpos=0
        errorXpos=2
    TextComponent letterText
      text [set every repeat] = $letter
      stopVal [duration (s)] = 2
      pos [set every frame] = [letterXpos, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.4
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    TextComponent promptText
      wrapWidth = 1.5
      text = Matches Target?
      stopVal [duration (s)] = 2
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    ImageComponent image
      stopVal [duration (s)] = 2
      pos = [-0.3, -0.7]
      startVal [time (s)] = 0.0
      image = yes_key.jpg
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    ImageComponent image_2
      stopVal [duration (s)] = 2
      pos = [0.3, -0.7]
      startVal [time (s)] = 0.0
      image = no_key.jpg
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    KeyboardComponent key_resp_2
      correctAns = $corrResponse
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = '2','3'
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent text_6
      color = red
      text [set every frame] = ERROR
      stopVal [duration (s)] = 2
      pos [set every frame] = [errorXpos, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine routine_2_Back_Target
    CodeComponent code_4
      Begin Experiment:
        Back2minus1=[]
        Back2minus2=[]
      Begin Routine:
        letters = ['B', 'C', 'D', 'F', 'G', 'H', 'J', 'K', 'L', 'M', 'N', 'P', 'Q', 'R', 'S', 'T', 'V', 'W', 'X', 'Z']
        from random import choice
        letter=choice(letters)
      End Routine:
        Back2minus2=Back2minus1
        Back2minus1=letter
    TextComponent text3
      text [set every repeat] = $letter
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.4
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    TextComponent Back2promptText
      wrapWidth = 2
      text = Matches 2 Back?
      stopVal [duration (s)] = 2
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine trigger
    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
  Routine selectBlock
    CodeComponent code_5
      Begin Experiment:
        nReps0Back=0
        nReps2Back=0
      Begin Routine:
        if (BlockCode==1):
            nReps0Back=1
            nReps2Back=0
        elif (BlockCode==2):
            nReps0Back=0
            nReps2Back=1
Flow
  Routine trigger
  LoopInitiator BlocksLoop loopType="TrialHandler"
    conditionsFile = blocks_loop.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'BlockCode': 1, u'Block': u'0-Back'},
      {u'BlockCode': 2, u'Block': u'2-Back'},
      {u'BlockCode': 1, u'Block': u'0-Back'},
      {u'BlockCode': 2, u'Block': u'2-Back'},
      {u'BlockCode': 1, u'Block': u'0-Back'},
      {u'BlockCode': 2, u'Block': u'2-Back'},
      {u'BlockCode': 1, u'Block': u'0-Back'},
      {u'BlockCode': 2, u'Block': u'2-Back'},
      {u'BlockCode': 1, u'Block': u'0-Back'},
      {u'BlockCode': 2, u'Block': u'2-Back'},
      {u'BlockCode': 1, u'Block': u'0-Back'},
      {u'BlockCode': 2, u'Block': u'2-Back'},
      {u'BlockCode': 1, u'Block': u'0-Back'},
      {u'BlockCode': 2, u'Block': u'2-Back'},
      {u'BlockCode': 1, u'Block': u'0-Back'},
      {u'BlockCode': 2, u'Block': u'2-Back'},
      {u'BlockCode': 1, u'Block': u'0-Back'},
      {u'BlockCode': 2, u'Block': u'2-Back'},
      {u'BlockCode': 1, u'Block': u'0-Back'},
      {u'BlockCode': 2, u'Block': u'2-Back'}]
    Routine selectBlock
    LoopInitiator Back0Loop loopType="TrialHandler"
      loopType = random
      nReps = nReps0Back
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      Routine routine_0_Back_Target
      LoopInitiator Back0TrialsLoop loopType="TrialHandler"
        conditionsFile = 0-back_loop.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{u'trial': 1, u'trialType': u'target', u'corrResponse': 2},
          {u'trial': 2, u'trialType': u'target', u'corrResponse': 2},
          {u'trial': 3, u'trialType': u'target', u'corrResponse': 2},
          {u'trial': 4, u'trialType': u'nonTarget', u'corrResponse': 3},
          {u'trial': 5, u'trialType': u'nonTarget', u'corrResponse': 3},
          {u'trial': 6, u'trialType': u'nonTarget', u'corrResponse': 3},
          {u'trial': 7, u'trialType': u'nonTarget', u'corrResponse': 3},
          {u'trial': 8, u'trialType': u'nonTarget', u'corrResponse': 3},
          {u'trial': 9, u'trialType': u'nonTarget', u'corrResponse': 3},
          {u'trial': 10, u'trialType': u'nonTarget', u'corrResponse': 3}]
        Routine routine_0_Back
      LoopTerminator Back0TrialsLoop
      Routine rest
    LoopTerminator Back0Loop
    LoopInitiator Back2Loop loopType="TrialHandler"
      loopType = random
      nReps = nReps2Back
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      LoopInitiator Back2TargetLoop loopType="TrialHandler"
        loopType = random
        nReps = 2
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        Routine routine_2_Back_Target
      LoopTerminator Back2TargetLoop
      LoopInitiator Back2TrialsLoop loopType="TrialHandler"
        conditionsFile = 2-back_loop.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{u'trial': 2, u'trialType': u'target', u'corrResponse': 2},
          {u'trial': 3, u'trialType': u'target', u'corrResponse': 2},
          {u'trial': 4, u'trialType': u'target', u'corrResponse': 3},
          {u'trial': 5, u'trialType': u'nonTarget', u'corrResponse': 3},
          {u'trial': 6, u'trialType': u'nonTarget', u'corrResponse': 3},
          {u'trial': 7, u'trialType': u'nonTarget', u'corrResponse': 3},
          {u'trial': 8, u'trialType': u'nonTarget', u'corrResponse': 3},
          {u'trial': 9, u'trialType': u'nonTarget', u'corrResponse': 3},
          {u'trial': 10, u'trialType': u'nonTarget', u'corrResponse': 3}]
        Routine routine_2_Back
      LoopTerminator Back2TrialsLoop
      Routine rest
    LoopTerminator Back2Loop
  LoopTerminator BlocksLoop
